PsychoPy2experiment version="2020.2.4post1"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'],'pilot', expName, expInfo['date'])
  Experiment info = {'ID': ''}
  Full-screen window = True
  Monitor = MR 
  Screen = 2
  Units = height
  Use version = 2020.2
  Window size (pixels) = [1920, 1080]
  color = $[0.114,0.310,0.380]
  expName = TérKépÉsz
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Routines
  Routine welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Üdvözöljük a TTK Agyi Képalkotó Központjában!
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    KeyboardComponent key_resp
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent disable_mouse
      Code Type = Auto->JS
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      Begin Experiment:
        import os
        os.system('color')
        from termcolor import colored, cprint
        import colorama
        colorama.init()
        win.mouseVisible = False
      Begin Routine:
        cprint('On Screen: Welcome Message', 'blue', 'on_white')
        print('Mouse disabled on screen. Keep CMD window active!')
        cprint('Hit SPACE or -> to continue.', 'red')
  Routine anatomy
    TextComponent anatomy_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = height
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      text:
        Anatómiai felvételek következnek.

        A felvételek közben videót vetítünk le Önnek.
    KeyboardComponent general_instructions_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent general_instructions_continue
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = Ha minden rendben, nyomja le a gombot a jobb hüvelykujjával. 
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    CodeComponent experimenter_message_anatomy
      Code Type = Auto->JS
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      Begin Routine:
        info_text = 'Anatómiai felvételek következnek.\nA felvételek közben videót vetítünk le Önnek.'
        cprint(info_text, 'blue', 'on_white')
        cprint('\n\nWaiting for participant response.\n\n', 'yellow')
  Routine choose_video
    TextComponent choose_video_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = height
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      text:
        Válasszon az alábbi videók közül.

        Jobb mutatóujj: Skócia a levegőből
        Jobb hüvelykujj: Afrika szépségei

        Bal mutatóujj: Vihar
        Bal hüvelykujj: Űr
    KeyboardComponent choose_video_key
      allowedKeys = 'a', 'd', 'c', 'b'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 298.5
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    CodeComponent select_video
      Code Type = Auto->JS
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      Begin Routine:
        print('Participant chooses video.')
      End Routine:
        key_pressed=choose_video_key.keys
        selected_video='stimuli/eye_of_the_storm.mp4'
        if key_pressed=='d':
            selected_video='stimuli/beauty_of_africa.mp4'
        elif key_pressed=='c':
            selected_video='stimuli/scotland.mp4'
        elif key_pressed=='a':
            selected_video='stimuli/hubble_final.mp4'
        elif key_pressed=='b':
            selected_video='stimuli/eye_of_the_storm.mp4'

        print('Video selected: ', selected_video)
  Routine video
    MovieComponent video_file
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $selected_video
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2700.0
      units = pix
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    KeyboardComponent end_video_key
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 2695.0
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    CodeComponent experimenter_message_video
      Code Type = Auto->JS
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      Begin Routine:
        print('Video playing...\nHit SPACE to end video and prepare for resting state.')
  Routine resting_state_instruction
    TextComponent rest_instructions_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Most a nyugalmi mérés következik.

        A mérés közben egy fixációs keresztet lát majd a képernyőn.

        Nézze ezt a keresztet. Gondolatait hagyja kalandozni.
        Kérjük, közben maradjon ébren. A nyugalmi mérés 8 percig tart.
    KeyboardComponent rest_instructions_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent rest_instructions_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = Ha minden rendben nyomja le a gombot a jobb hüvelykujjával. 
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    CodeComponent experimenter_message_resting_info
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen', 'blue', 'on_white')
        cprint('Most a nyugalmi mérés következik.', 'blue', 'on_white')
        cprint('A mérés közben egy fixációs keresztet lát majd a képernyőn.', 'blue', 'on_white')
        cprint('Nézze ezt a keresztet. Gondolatait hagyja kalandozni.',  'blue', 'on_white')
        cprint('Kérjük, közben maradjon ébren. A nyugalmi mérés 8 percig tart.',  'blue', 'on_white')
        cprint('\n\nWaiting for participant response...', 'yellow')
  Routine resting_state
    TextComponent fx_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
      wrapWidth = 0.65
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    KeyboardComponent rest_end_key
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent experimenter_message_resting_sate
      Code Type = Auto->JS
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      Begin Routine:
        cprint('\n\nFixation cross on screen.', 'blue', 'on_white')
        cprint('Press SPACE or -> to end resting state.', 'red')
  Routine prepare_task
    TextComponent prepare_task_text
      color = black
      letterHeight = 0.05
      pos = (0.0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        Most a feladatok következnek.

        Ha minden rendben, nyomja le a gombot a jobb hüvelykujjával.
    KeyboardComponent prepare_task_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    CodeComponent experimenter_message_end
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: \nMessage on screen:\nMost a feladatok következnek.Ha minden rendben, nyomja le a gombot a jobb hüvelykujjával.',  'blue', 'on_white')
        cprint('Waiting for participant response...', 'yellow')
Flow
  Routine welcome
  Routine anatomy
  Routine choose_video
  Routine video
  Routine resting_state_instruction
  Routine resting_state
  Routine prepare_task
